<PlusConfiguration version="2.3">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet
      Name="PlusServer: pyIGTLink Mocked Data"
      Description="pyIGTLink Mock"
    />
     LocalTimeOffsetSec="0.0" -->
    <Device
    Id="OpenIGTLinkVideoSenderDevice"
    Type="OpenIGTLinkVideo"
    MessageType="Image"
    ServerAddress="127.0.0.1"
    ServerPort="18905"
    IgtlMessageCrcCheckEnabled="false" >
    <DataSources>
      <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF"  />
    </DataSources>
    <OutputChannels>
      <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
    </OutputChannels>
  </Device>

  <Device
    Id="TrackedVideoDevice"
    Type="VirtualMixer"
    BaseFilename="RecordingTest.mha"
    EnableCapturingOnStart="FALSE" >
    <InputChannels>
      <InputChannel Id="VideoStream" />
    </InputChannels>
    <OutputChannels>
      <OutputChannel Id="TrackedVideoStream"/>
    </OutputChannels>
  </Device>

  <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="Recording.mhd"
      EnableCapturingOnStart="FALSE"
      RequestedFrameRate="15" >
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>

 
</DataCollection>

  <CoordinateDefinitions>

	<Transform From="Image" To="USTip"
	Matrix="
 -0.0640225 -0.00644543 -0.00560506 30.4624 
-0.00582192 0.00191411 0.0642984 8.2935 
-0.00625024 0.0642389 -0.00247827 -1.94724 
0 0 0 1 
	" /> 


  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="10"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    OutputChannelId="TrackedVideoStream"
    SendValidTransformsOnly="true"> <!--On the US config file-->
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="STRING" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <!-- To avoid "Transform path not found" warnings, remove transforms for tools that are not defined by the StealthStation -->
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="USTip" />
      </ImageNames>
      <StringNames>
      </StringNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>
