<PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="TEST Tracking and video data is read from sequence file." 
      Description="Test configuration file for vtkDataCollectorTest to use saved dataset. The SequenceMetafile names should be defined either from command line argument or from configuration file!" />
   
    <Device
      Id="VideoDevice" 
      Type="SavedDataSource"
      UseData="IMAGE"
      RepeatEnabled="TRUE"
      UseOriginalTimestamps="TRUE"
      SequenceFile="Recording1.mha" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF"/>
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>

     <Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <!-- <InputChannel Id="TrackerStream" /> -->
        <InputChannel Id="VideoStream" />
      </InputChannels>      
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
     </Device>

    <!--  <Device -->
    <!--   Id="VolumeReconstructorDevice" -->
    <!--   Type="VirtualVolumeReconstructor"> -->
    <!--   <InputChannels> -->
    <!--     <InputChannel Id="TrackedVideoStream" /> -->
    <!--   </InputChannels> -->
    <!--   <VolumeReconstruction -->
    <!--     ImageCoordinateFrame="Image" ReferenceCoordinateFrame="Reference" -->
    <!--     Interpolation="LINEAR" Optimization="FULL" Compounding="On" FillHoles="Off" NumberOfThreads="2" -->
    <!--     OutputSpacing="0.5 0.5 0.5" > -->
		<!-- <HoleFilling> -->
    <!--       <HoleFillingElement Type="GAUSSIAN" Size="5" Stdev="0.6667" MinimumKnownVoxelsRatio="0.50001" /> -->
    <!--       <HoleFillingElement Type="STICK" StickLengthLimit="9" NumberOfSticksToUse="1" /> -->
    <!--      </HoleFilling> -->
	  <!--  </VolumeReconstruction> -->
    <!-- </Device> -->
   
    
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Image" To="Reference"
      Matrix="
        0.2 0.0 0.0 0.0
        0.0 0.2 0.0 0.0
        0.0 0.0 0.2 0.0        
        0 0 0 1" />
  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="TrackedVideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
        <!-- <Message Type="TRANSFORM" /> -->
      </MessageTypes>
      <!-- <TransformNames>  -->
      <!--   <Transform Name="ProbeToTracker" />  -->
      <!--   <Transform Name="ReferenceToTracker" />  -->
      <!--   <Transform Name="ProbeToReference" /> -->
      <!-- </TransformNames> -->
      <ImageNames>
        <Image Name="Image"  EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>
