<PlusConfiguration version="2.3">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet
      Name="PlusServer: Medtronic StealthLink tracker + BK5000"
      Description="Broadcasting tool tracking data through OpenIGTLink
Tools: Stylus (Passive Planar, Blunt) , Reference (Small Passive Cranial Frame)"
    />
    <Device
      Id="SLD"
      Type="StealthLinkTracker"
      ServerAddress="128.16.0.2"
      ServerPort="6996"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" PortName="Passive Planar, Blunt" />
        <DataSource Type="Tool" Id="Reference" PortName="Small Passive Cranial Frame" />
        <DataSource Type="Tool" Id="Ras"      PortName="RasRegistration" />
	      <DataSource Type="Tool" Id="SureTrack2"      PortName="SureTrak2 Silver Passive" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource  Id="SureTrack2" />
          <DataSource  Id="Stylus" />
          <DataSource  Id="Reference" />
          <DataSource  Id="Ras" />
        </OutputChannel>
      </OutputChannels>
    </Device>
<!-- LocalTimeOffsetSec="0.0" -->
  <Device
    Id="VideoDevice"
    Type="BkProFocusOem"
	ScannerAddress="128.16.0.3"
	OemPort="7915"
    ContinuousStreamingEnabled="false"
    ColorEnabled="false"
    AcquisitionRate="1.5"
    OfflineTesting="false"
    OfflineTestingFilePath="c:\dev\bktest.png" >
    <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF"  />
    </DataSources>
    <OutputChannels>
      <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
    </OutputChannels>
  </Device>

  <Device
    Id="TrackedVideoDevice"
    Type="VirtualMixer"
    BaseFilename="RecordingTest.mha"
    EnableCapturingOnStart="FALSE" >
    <InputChannels>
      <InputChannel Id="VideoStream" />
      <InputChannel Id="TrackerStream" />
    </InputChannels>
    <OutputChannels>
      <OutputChannel Id="TrackedVideoStream"/>
    </OutputChannels>
  </Device>

  <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="Recording.mhd"
      EnableCapturingOnStart="FALSE"
      RequestedFrameRate="15" >
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>

</DataCollection>

  <CoordinateDefinitions>

<!-- TransducerToProbe transform matrix is computed from calibration matrices provided by Ultrasonix for linear GPS probe -->

    <Transform From="Transducer" To="Probe"
      Matrix="
        0.0018    0.9477   -0.0175   14.8449
       -1.0000    0.0016   -0.0052   15.0061
       -0.0052    0.0166    0.9998    0.1638
             0         0         0    1.0000" />

    <Transform From="Ras" To="Lps"
      Matrix="
        -1  0  0  0
         0 -1  0  0
         0  0  1  0
         0  0  0  1" />

    <Transform From="Image" To="Reference"
      Matrix="
        0.2 0.0 0.0 0.0
        0.0 0.2 0.0 0.0
        0.0 0.0 0.2 0.0
        0 0 0 1" />
  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18905"
    OutputChannelId="TrackedVideoStream"
    SendValidTransformsOnly="true"> <!--On the US config file-->
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="STRING" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <!-- To avoid "Transform path not found" warnings, remove transforms for tools that are not defined by the StealthStation -->
        <Transform Name="StylusToReference" />
        <Transform Name="SureTrack2ToRas"  />
        <Transform Name="StylusToRas"  />
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
      <StringNames>
        <String Name="DepthMm" />
        <String Name="PixelSpacingMm" />
        <String Name="TransducerOriginPix" />
      </StringNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>
