<PlusConfiguration version="2.6">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet
      Name="PlusServer: Medtronic StealthLink tracker + Ultrasonix"
      Description="Broadcasting tool tracking data through OpenIGTLink
Tools: Stylus (Passive Planar, Blunt) , Reference (Small Passive Cranial Frame)"
    />
    <Device
      Id="SLD"
      Type="StealthLinkTracker"
      ServerAddress="128.16.0.2"
      ServerPort="6996"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" PortName="Passive Planar, Blunt" AlwaysTrack="True" />
        <DataSource Type="Tool" Id="Reference" PortName="Small Passive Cranial Frame" AlwaysTrack="True" />
        <DataSource Type="Tool" Id="Ras"      PortName="RasRegistration" AlwaysTrack="True"/>
	      <DataSource Type="Tool" Id="SureTrack2"      PortName="SureTrak2 Black Passive" AlwaysTrack="True"/>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource  Id="SureTrack2" />
          <DataSource  Id="Stylus" />
          <DataSource  Id="Reference" />
          <DataSource  Id="Ras" />
        </OutputChannel>
      </OutputChannels>
    </Device>
<!-- LocalTimeOffsetSec="0.0" -->
  <Device
    Id="VideoDevice"
    Type="SonixVideo"
    AcquisitionRate="30"
    AutoClipEnabled="TRUE"
    ImageGeometryOutputEnabled="TRUE"
    ImageToTransducerTransformName="ImageToTransducer"
    IP="128.16.0.3" >
    <DataSources>
      <DataSource Type="Video" Id="Video" PortName="B" PortUsImageOrientation="UF"  />
    </DataSources>
    <OutputChannels>
      <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
    </OutputChannels>
  </Device>

  <Device
    Id="TrackedVideoDevice"
    Type="VirtualMixer"
    BaseFilename="RecordingTest.mha"
    EnableCapturingOnStart="FALSE" >
    <InputChannels>
      <InputChannel Id="VideoStream" />
      <InputChannel Id="TrackerStream" />
    </InputChannels>
    <OutputChannels>
      <OutputChannel Id="TrackedVideoStream"/>
    </OutputChannels>
  </Device>

  <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="Recording.mhd"
      EnableCapturingOnStart="FALSE"
      RequestedFrameRate="15" >
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>

</DataCollection>

  <CoordinateDefinitions>

<!-- TransducerToProbe transform matrix is computed from calibration matrices provided by Ultrasonix for linear GPS probe  -->

    <Transform From="Image" To="SureTrack2Tip"
      Matrix="
		0.0228533 0.0324832 0.0646095 -7.36664 
		0.0718974 -0.0174831 -0.0166412 -15.1173 
		0.00776649 0.0662647 -0.0360624 -3.47876 
		0 0 0 1 
			" />

 
    <Transform From="Ras" To="Lps"
      Matrix="
        -1  0  0  0
         0 -1  0  0
         0  0  1  0
         0  0  0  1" />

    <!--<Transform From="Image" To="Reference"
      Matrix="
		1.0 0.0 0.0 0.0
        0.0 1.0 0.0 0.0
        0.0 0.0 1.0 0.0
        0 0 0 1
        " /> -->
		
		<!--"0.2 0.0 0.0 0.0
        0.0 0.2 0.0 0.0
        0.0 0.0 0.2 0.0
        0 0 0 1 /> -->
	<Transform From="SureTrack2Tip" To="SureTrack2"
      Matrix="
	0.999996 0 0.00295124 2.10151 
	0.0029511 -0.00962836 -0.999949 -262.709 
	2.84156e-05 0.999954 -0.00962832 -48.7503 
	0 0 0 1 " />

  </CoordinateDefinitions>
  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18905"
    OutputChannelId="TrackedVideoStream"
    SendValidTransformsOnly="true"> <!--On the US config file-->
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="STRING" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <!-- To avoid "Transform path not found" warnings, remove transforms for tools that are not defined by the StealthStation -->
        <Transform Name="StylusToReference" />
		<Transform Name="SureTrack2ToReference"  />
		<Transform Name="SureTrack2TipToSureTrack2"  />
        <Transform Name="SureTrack2ToRas"  />
        <Transform Name="StylusToRas"  />
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="SureTrack2Tip" />
      </ImageNames>
      <StringNames>
        <String Name="DepthMm" />
        <String Name="PixelSpacingMm" />
        <String Name="TransducerOriginPix" />
      </StringNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>
