<PlusConfiguration version="2.3">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet
      Name="PlusServer: Medtronic StealthLink tracker + BK5000 (via pyIGTLink)"
      Description="Broadcasting tool tracking data through OpenIGTLink
Tools: Stylus (Passive Planar, Blunt) , Reference (Small Passive Cranial Frame)"
    />
    <Device
      Id="SLD"
      Type="StealthLinkTracker"
      ServerAddress="128.16.0.2"
      ServerPort="6996"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" PortName="Passive Planar, Blunt" AlwaysTrack="TRUE"/>
        <DataSource Type="Tool" Id="Reference" PortName="Small Passive Cranial Frame"  />
        <DataSource Type="Tool" Id="Ras"      PortName="RasRegistration" />
	      <DataSource Type="Tool" Id="SureTrack2Black"      PortName="SureTrak2 Black Passive" AlwaysTrack="TRUE"/>
 	      <DataSource Type="Tool" Id="SureTrack2Orange"      PortName="SureTrak2 Orange Passive" AlwaysTrack="TRUE"/>
	      <DataSource Type="Tool" Id="SureTrack2Silver"      PortName="SureTrak2 Silver Passive" AlwaysTrack="TRUE"/>


      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource  Id="SureTrack2Black" 
          <DataSource  Id="SureTrack2Orange" />
          <DataSource  Id="SureTrack2Silver" />

          <DataSource  Id="Stylus" />
          <DataSource  Id="Reference" />
          <DataSource  Id="Ras" />
        </OutputChannel>
      </OutputChannels>
    </Device>
<!-- LocalTimeOffsetSec="0.0" -->
    <Device
    Id="OpenIGTLinkVideoSenderDevice"
    Type="OpenIGTLinkVideo"
    MessageType="Image"
    ServerAddress="127.0.0.1"
    ServerPort="18905"
    IgtlMessageCrcCheckEnabled="false" >
    <DataSources>
      <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF"  />
    </DataSources>
    <OutputChannels>
      <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
    </OutputChannels>
  </Device>

  <Device
    Id="TrackedVideoDevice"
    Type="VirtualMixer"
    BaseFilename="RecordingTest.mha"
    EnableCapturingOnStart="FALSE" >
    <InputChannels>
      <InputChannel Id="VideoStream" />
      <InputChannel Id="TrackerStream" />
    </InputChannels>
    <OutputChannels>
      <OutputChannel Id="TrackedVideoStream"/>
    </OutputChannels>
  </Device>

  <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="Recording.mhd"
      EnableCapturingOnStart="FALSE"
      RequestedFrameRate="15" >
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>


	<Device
      Id="VolumeReconstructorDevice"
      Type="VirtualVolumeReconstructor"
      OutputVolDeviceName="RecVol_Reference">
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
      <VolumeReconstruction
        ImageCoordinateFrame="Image" ReferenceCoordinateFrame="Reference"
        Interpolation="LINEAR" Optimization="NONE" Compounding="On" FillHoles="On" NumberOfThreads="2"
		ClipRectangleOrigin="0 0" ClipRectangleSize="820 726"
        OutputOrigin="0 0 0" OutputSpacing="0.5 0.5 0.5">
		        <HoleFilling>
          <HoleFillingElement
            Type="STICK"
            StickLengthLimit="9"
            NumberOfSticksToUse="1" />
        </HoleFilling>
		</VolumeReconstruction>
    </Device>
 
</DataCollection>

  <CoordinateDefinitions>

	<Transform From="Image" To="SureTrack2BlackTip"
	Matrix="
 -0.0640225 -0.00644543 -0.00560506 30.4624 
-0.00582192 0.00191411 0.0642984 8.2935 
-0.00625024 0.0642389 -0.00247827 -1.94724 
0 0 0 1 
	" /> 

	<Transform From="SureTrack2BlackTip" To="SureTrack2Black"
	Matrix="
		0.999484 0 -0.0321145 -3.56231 
		-0.032043 -0.0666886 -0.997259 -111.797 
		-0.00214167 0.997774 -0.0666542 -47.7545 
		0 0 0 1 
	" /> 
	
    <Transform From="Ras" To="Lps"
      Matrix="
        -1  0  0  0
         0 -1  0  0
         0  0  1  0
         0  0  0  1" />


  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="10"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    OutputChannelId="TrackedVideoStream"
    SendValidTransformsOnly="true"> <!--On the US config file-->
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="STRING" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <!-- To avoid "Transform path not found" warnings, remove transforms for tools that are not defined by the StealthStation -->
        <Transform Name="StylusToReference" />
        <Transform Name="SureTrack2BlackToRas"  />
		<Transform Name="SureTrack2BlackToReference"  />
		<Transform Name="StylusToSureTrack2BlackTip"  />
		<Transform Name="SureTrack2BlackTipToSureTrack2Black"  />
		<Transform Name="SureTrack2OrangeToRas"  />
		<Transform Name="SureTrack2SilverToRas"  />
		<Transform Name="ReferenceToRas" />
       <!-- <Transform Name="StylusToRas"  /> -->
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="SureTrack2BlackTip" />
      </ImageNames>
      <StringNames>
        <String Name="DepthMm" />
        <String Name="PixelSpacingMm" />
        <String Name="TransducerOriginPix" />
      </StringNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>
