<PlusConfiguration version="2.3">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet
      Name="PlusServer: Medtronic StealthLink tracker + BK5000 (via pyIGTLink) for Image Calibration"
      Description="Broadcasting tool tracking data through OpenIGTLink
Tools: Stylus (Passive Planar, Blunt) , Reference (Small Passive Cranial Frame)"
    />
    <Device
      Id="SLD"
      Type="StealthLinkTracker"
      ServerAddress="128.16.0.2"
      ServerPort="6996"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" PortName="Passive Planar, Blunt" AlwaysTrack="TRUE"/>
        <DataSource Type="Tool" Id="Reference" PortName="Small Passive Cranial Frame"  />
        <!-- <DataSource Type="Tool" Id="Ras"      PortName="RasRegistration" /> -->
	    <DataSource Type="Tool" Id="SureTrack2"      PortName="SureTrak2 Black Passive" AlwaysTrack="TRUE"/>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource  Id="SureTrack2" />
          <DataSource  Id="Stylus" />
          <DataSource  Id="Reference" />
          <!-- <DataSource  Id="Ras" /> -->
        </OutputChannel>
      </OutputChannels>
    </Device>
<!-- LocalTimeOffsetSec="0.0" -->
    <Device
    Id="OpenIGTLinkVideoSenderDevice"
    Type="OpenIGTLinkVideo"
    MessageType="Image"
    ServerAddress="127.0.0.1"
    ServerPort="18905"
    IgtlMessageCrcCheckEnabled="false" >
    <DataSources>
      <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF"  />
    </DataSources>
    <OutputChannels>
      <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
    </OutputChannels>
  </Device>

  <Device
    Id="TrackedVideoDevice"
    Type="VirtualMixer"
    BaseFilename="RecordingTest.mha"
    EnableCapturingOnStart="FALSE" >
    <InputChannels>
      <InputChannel Id="VideoStream" />
      <InputChannel Id="TrackerStream" />
    </InputChannels>
    <OutputChannels>
      <OutputChannel Id="TrackedVideoStream"/>
    </OutputChannels>
  </Device>

  <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="Recording.mhd"
      EnableCapturingOnStart="FALSE"
      RequestedFrameRate="5" >
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>

<!--
	<Device
      Id="VolumeReconstructorDevice"
      Type="VirtualVolumeReconstructor"
      OutputVolDeviceName="RecVol_Reference">
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
      <VolumeReconstruction
        ImageCoordinateFrame="Image" ReferenceCoordinateFrame="Reference"
        Interpolation="LINEAR" Optimization="NONE" Compounding="On" FillHoles="On" NumberOfThreads="2"
		ClipRectangleOrigin="0 0" ClipRectangleSize="820 726"
        OutputOrigin="0 0 0" OutputSpacing="0.5 0.5 0.5">
		        <HoleFilling>
          <HoleFillingElement
            Type="STICK"
            StickLengthLimit="9"
            NumberOfSticksToUse="1" />
        </HoleFilling>
		</VolumeReconstruction>
    </Device>
 -->
</DataCollection>

  <CoordinateDefinitions>
<!-- 
	<Transform From="Image" To="SureTrack2Tip"
	Matrix="
	-0.0614524 -0.000590372 -0.00299226 27.1976 
	-0.00298393 -0.000853928 0.0614497 1.57 
	-0.000631149 0.0615193 0.000824247 2.5 
	0 0 0 1 
	" />  
 -->
 
 <!-- ImageToSureTrackTip @ 4.5cm 
 -0.0640225 -0.00644543 -0.00560506 30.4624 
-0.00582192 0.00191411 0.0642984 8.2935 
-0.00625024 0.0642389 -0.00247827 -1.94724 
0 0 0 1 

	ImageToSureTrackTip @ 3.5cm
-0.0435662 -0.000407961 0.00460543 21.8348 
0.00455396 0.00375201 0.0434117 2.41274 
-0.000798657 0.043648 -0.00368865 1.97602 
0 0 0 1 
	
	ImageToSureTrackTip @ 6cm
-0.074818 -0.00291639 -0.0104303 40.8592 
-0.0108259 0.0222327 0.071439 -6.08589 
0.000311511 0.0721958 -0.022421 2.54638 
0 0 0 1 

-->
	<Transform From="Image" To="Reference"
	Matrix="
	1 0 0 0 
	0 1 0 0
	0 0 1 0
	0 0 0 1 
	" /> 

	<!-- <Transform From="SureTrack2Tip" To="SureTrack2"
	Matrix="
0.999884 0 -0.0152069 -3.00666 
-0.0151821 -0.0571077 -0.998253 -109.564 
-0.000868431 0.998368 -0.0571011 -45.7899 
0 0 0 1 

	" /> 
	
    <Transform From="Ras" To="Lps"
      Matrix="
        -1  0  0  0
         0 -1  0  0
         0  0  1  0
         0  0  0  1" />-->
		 
	<Transform From="StylusTip" To="Stylus" Matrix="1 0 0 0   0 1 0 0   0 0 1 0   0 0 0 1" /> 

  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="10"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    OutputChannelId="TrackedVideoStream"
    SendValidTransformsOnly="true"> <!--On the US config file-->
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="STRING" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <!-- To avoid "Transform path not found" warnings, remove transforms for tools that are not defined by the StealthStation -->
        <Transform Name="StylusToReference" />
		<Transform Name="SureTrack2ToReference" />
       <!-- <Transform Name="StylusToRas"  />
<Transform Name="SureTrack2ToRas"  />
<Transform Name="SureTrack2TipToSureTrack2"  />
<Transform Name="ReferenceToRas" />
<Transform Name="StylusToSureTrack2Tip"  />
	   -->
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
      <StringNames>
        <String Name="DepthMm" />
        <String Name="PixelSpacingMm" />
        <String Name="TransducerOriginPix" />
      </StringNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

	<Rendering WorldCoordinateFrame="Reference">
    <DisplayableObject Type="Model" ObjectCoordinateFrame="Reference" Id="Volume"/>
    <DisplayableObject Type="Model" ObjectCoordinateFrame="StylusTip" Id="StylusModel" File="Stylus_Example.stl" />
    <DisplayableObject Id="PhantomModel" Type="Model" ObjectCoordinateFrame="Phantom"
      Opacity="0.6"
      File="fCal_2.1.stl" />
      <!-- ModelToObjectTransform="
        1 0 0 -35.0
        0 1 0 -10.0
        0 0 1 -5.0
        0 0 0 1" />
    <DisplayableObject Type="Image" ObjectCoordinateFrame="Image" Id="LiveImage"/> -->
	</Rendering>

<PhantomDefinition>
    <Description
      Name="fCAL"
      Type="Multi-N"
      Version="2.1"
      WiringVersion="2.0"
      Institution="Queen's University PerkLab"
    />
    <Geometry>
      <Pattern Type="NWire">
		<Wire Name="1:A1_a1" EndPointFront="0.0 0.0 20.0" EndPointBack="0.0 40.0 20.0" />
        <Wire Name="2:C1_b1" EndPointFront="10.0 0.0 20.0" EndPointBack="5.0 40.0 20.0" />
        <Wire Name="3:D1_d1" EndPointFront="15.0 0.0 20.0" EndPointBack="15.0 40.0 20.0" />
      </Pattern>
      <Pattern Type="NWire">
       	<Wire Name="4:A2_a2" EndPointFront="0.0 0.0 15.0" EndPointBack="0.0 40.0 15.0" />
        <Wire Name="5:B2_c2" EndPointFront="5.0 0.0 15.0" EndPointBack="10.0 40.0 15.0" />
        <Wire Name="6:D2_d2" EndPointFront="15.0 0.0 15.0" EndPointBack="15.0 40.0 15.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="7:A3_a3" EndPointFront="0.0 0.0 10.0" EndPointBack="0.0 40.0 10.0" />
        <Wire Name="8:C3_b3" EndPointFront="10.0 0.0 10.0" EndPointBack="5.0 40.0 10.0" />
        <Wire Name="9:D3_d3" EndPointFront="15.0 0.0 10.0" EndPointBack="15.0 40.0 10.0" />
      </Pattern>
	  
      <Landmarks>
        
       <Landmark Name="#1"  Position="-32.53 -5.25 45.0" />

        <Landmark Name="#2"  Position="-32.53 -5.25  5.0" />

        <Landmark Name="#3"  Position="-32.53 19.75 -5.0" />

        <Landmark Name="#4"  Position="-32.53 19.75 45.0" />        

        <Landmark Name="#5"  Position="105.47 -5.25 -5.0" />

        <Landmark Name="#6"  Position="105.47 -5.25 45.0" />

        <Landmark Name="#7"  Position="105.47 14.75 -5.0" />

        <Landmark Name="#8"  Position="105.47 19.75 45.0" />
<!--
        <Landmark Name="#9"  Position=" -3.53 -9.25 45.0" />

        <Landmark Name="#10" Position=" 41.47 -9.25 45.0" />

        <Landmark Name="#11" Position=" 86.47 -9.25 45.0" />

        <Landmark Name="#12" Position=" 96.47 -9.25 30.0" />        

        <Landmark Name="#13" Position=" 86.47 -9.25 -5.0" />

        <Landmark Name="#14" Position=" 21.47 -9.25 -5.0" />

        <Landmark Name="#15" Position=" -3.53 -9.25 -5.0" />

        <Landmark Name="#16" Position="-13.53 -9.25 10.0" />
		-->
      </Landmarks>
	  
    </Geometry>
  </PhantomDefinition>
  
<VolumeReconstruction OutputSpacing="0.5 0.5 0.5"
    ClipRectangleOrigin="0 0" ClipRectangleSize="820 616"
    Interpolation="LINEAR" Optimization="FULL" CompoundingMode="MEAN" FillHoles="OFF" />
  <fCal
    PhantomModelId="PhantomModel"
    ReconstructedVolumeId="Volume"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfCalibrationImagesToAcquire="200"
    NumberOfValidationImagesToAcquire="100"
    NumberOfStylusCalibrationPointsToAcquire="200"
    RecordingIntervalMs="100"
    MaxTimeSpentWithProcessingMs="70"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    TemporalCalibrationDurationSec="10" 
    FixedChannelId="VideoStream" 
    FixedSourceId="Video"
    MovingChannelId="TrackerStream"
    MovingSourceId="ProbeToTracker"
    DefaultSelectedChannelId="TrackedVideoStream" 
    FreeHandStartupDelaySec="5" />

  <vtkPlusPivotCalibrationAlgo
    ObjectMarkerCoordinateFrame="Stylus"
    ReferenceCoordinateFrame="Reference"
    ObjectPivotPointCoordinateFrame="StylusTip" />

  <vtkPlusPhantomLandmarkRegistrationAlgo
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    StylusTipCoordinateFrame="StylusTip" 
    DetectionTimeSec="1.0"
    StylusTipMaximumDisplacementThresholdMm="1.8" />

  <vtkPlusProbeCalibrationAlgo
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference" />

</PlusConfiguration>
