<PlusConfiguration version="2.3">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet
      Name="PlusServer: Medtronic StealthLink tracker + BK5000 (via pyIGTLink)"
      Description="Broadcasting tool tracking data through OpenIGTLink
Tools: Stylus (Passive Planar, Blunt) , Reference (Small Passive Cranial Frame), Black, Silver, Orange Passives"
    />
    <Device
      Id="SLD"
      Type="StealthLinkTracker"
      ServerAddress="128.16.0.2"
      ServerPort="6996"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" PortName="Passive Planar, Blunt" AlwaysTrack="TRUE"/>
        <DataSource Type="Tool" Id="Reference" PortName="Small Passive Cranial Frame"  />
        <DataSource Type="Tool" Id="Ras"      PortName="RasRegistration" />
	      <DataSource Type="Tool" Id="US"      PortName="SureTrak2 Black Passive" AlwaysTrack="TRUE"/>
        <!-- UNCOMMENT BELOW FOR CUSA -->
 	      <!-- <DataSource Type="Tool" Id="CUSA"      PortName="SureTrak2 Orange Passive" AlwaysTrack="TRUE"/> -->
	      <DataSource Type="Tool" Id="Stim"      PortName="SureTrak2 Orange Passive" AlwaysTrack="TRUE"/>

      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource  Id="US"  />
          <!-- UNCOMMENT BELOW FOR CUSA -->
          <!-- <DataSource  Id="CUSA" /> -->
          <DataSource  Id="Stim" />

          <DataSource  Id="Stylus" />
          <DataSource  Id="Reference" />
          <DataSource  Id="Ras" />
        </OutputChannel>
      </OutputChannels>
    </Device>
<!-- LocalTimeOffsetSec="0.0" -->


  <Device
    Id="TrackedVideoDevice"
    Type="VirtualMixer"
    BaseFilename="RecordingTest.mha"
    EnableCapturingOnStart="FALSE" >
    <InputChannels>
      <InputChannel Id="TrackerStream" />
    </InputChannels>
    <OutputChannels>
      <OutputChannel Id="TrackedVideoStream"/>
    </OutputChannels>
  </Device>

  <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="Recording.mhd"
      EnableCapturingOnStart="FALSE"
      RequestedFrameRate="15" >
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>

 
</DataCollection>

  <CoordinateDefinitions>
	
    <Transform From="Ras" To="Lps"
      Matrix="
        -1  0  0  0
         0 -1  0  0
         0  0  1  0
         0  0  0  1" />


  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="10"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    OutputChannelId="TrackedVideoStream"
    SendValidTransformsOnly="true"> <!--On the US config file-->
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="STRING" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <!-- To avoid "Transform path not found" warnings, remove transforms for tools that are not defined by the StealthStation -->
        <Transform Name="StylusToReference" />
        <Transform Name="USToRas"  />
		<Transform Name="USToReference"  />
		<Transform Name="StylusToUSTip"  />
  	<!-- UNCOMMENT BELOW FOR CUSA -->
		<!-- <Transform Name="CUSAToRas"  /> -->
		<Transform Name="StimToRas"  />
		<Transform Name="StimToReference" />
		<Transform Name="ReferenceToRas" />
		<Transform Name="USTipToUS"  />
   	<!-- UNCOMMENT BELOW FOR CUSA -->
		<!-- <Transform Name="CUSATipToCUSA"  /> -->
		<Transform Name="StimTipToStim"  />
        <Transform Name="StylusToRas"  />
      </TransformNames>

    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>
